# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_175 gabor_160 gabor_119 gabor_143    gabor_175 gabor_160_alt gabor_119_alt gabor_143      "1_1_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_175_160_119_143_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_143_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_1_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_111 gabor_002 gabor_157 gabor_174    gabor_111_alt gabor_002 gabor_157_alt gabor_174      "1_2_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_111_002_157_174_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_174_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_2_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_045 gabor_065 gabor_174 gabor_110    gabor_045_alt gabor_065_alt gabor_174 gabor_110      "1_3_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_045_065_174_110_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_3_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_065 gabor_023 gabor_049 gabor_084    gabor_065 gabor_023_alt gabor_049 gabor_084_alt      "1_4_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_065_023_049_084_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_4_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  2042      fixation_cross    gabor_049 gabor_086 gabor_156 gabor_031    gabor_049 gabor_086_alt gabor_156_alt gabor_031      "1_5_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_049_086_156_031_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_5_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_062 gabor_037 gabor_121 gabor_106    gabor_062_alt gabor_037 gabor_121_alt gabor_106      "1_6_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_062_037_121_106_target_position_2_4_retrieval_position_2"       gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_6_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_028 gabor_058 gabor_136 gabor_009    gabor_028 gabor_058 gabor_136_alt gabor_009_alt      "1_7_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_028_058_136_009_target_position_1_2_retrieval_position_1"       gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_7_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_075 gabor_025 gabor_154 gabor_134    gabor_075_alt gabor_025_alt gabor_154 gabor_134      "1_8_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_075_025_154_134_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_105_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_8_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_169 gabor_013 gabor_145 gabor_088    gabor_169_alt gabor_013 gabor_145_alt gabor_088      "1_9_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_169_013_145_088_target_position_2_4_retrieval_position_2"       gabor_circ gabor_063_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_9_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_002 gabor_160 gabor_130 gabor_111    gabor_002 gabor_160_alt gabor_130 gabor_111_alt     "1_10_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_002_160_130_111_target_position_1_3_retrieval_position_1"       gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_10_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_180 gabor_049 gabor_156 gabor_093    gabor_180 gabor_049 gabor_156_alt gabor_093_alt     "1_11_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_180_049_156_093_target_position_1_2_retrieval_position_1"       gabor_133_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_11_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1992  2992  2392      fixation_cross    gabor_162 gabor_147 gabor_132 gabor_074    gabor_162_alt gabor_147 gabor_132 gabor_074_alt     "1_12_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2400_gabor_patch_orientation_162_147_132_074_target_position_2_3_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_12_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_112_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_103 gabor_144 gabor_074 gabor_054    gabor_103 gabor_144_alt gabor_074 gabor_054_alt     "1_13_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_103_144_074_054_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_121_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_13_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_154 gabor_114 gabor_178 gabor_025    gabor_154_alt gabor_114 gabor_178 gabor_025_alt     "1_14_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_154_114_178_025_target_position_2_3_retrieval_position_2"       gabor_circ gabor_066_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_14_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_154 gabor_105 gabor_038 gabor_172    gabor_154 gabor_105_alt gabor_038 gabor_172_alt     "1_15_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_154_105_038_172_target_position_1_3_retrieval_position_1"       gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_15_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_018 gabor_180 gabor_098 gabor_062    gabor_018 gabor_180 gabor_098_alt gabor_062_alt     "1_16_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_018_180_098_062_target_position_1_2_retrieval_position_2"       gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_16_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2192  2992  2342      fixation_cross    gabor_109 gabor_032 gabor_001 gabor_172    gabor_109 gabor_032_alt gabor_001_alt gabor_172     "1_17_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2350_gabor_patch_orientation_109_032_001_172_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_007 gabor_153 gabor_117 gabor_045    gabor_007 gabor_153_alt gabor_117_alt gabor_045     "1_18_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_007_153_117_045_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_18_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_074 gabor_010 gabor_138 gabor_163    gabor_074 gabor_010_alt gabor_138_alt gabor_163     "1_19_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_074_010_138_163_target_position_1_4_retrieval_position_1"       gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_19_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2542      fixation_cross    gabor_109 gabor_163 gabor_088 gabor_046    gabor_109 gabor_163 gabor_088_alt gabor_046_alt     "1_20_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_109_163_088_046_target_position_1_2_retrieval_position_2"       gabor_circ gabor_163_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_20_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_152 gabor_179 gabor_093 gabor_028    gabor_152_alt gabor_179 gabor_093 gabor_028_alt     "1_21_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_152_179_093_028_target_position_2_3_retrieval_position_2"       gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_21_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  1892      fixation_cross    gabor_045 gabor_155 gabor_108 gabor_082    gabor_045 gabor_155_alt gabor_108 gabor_082_alt     "1_22_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_045_155_108_082_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_22_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_037 gabor_059 gabor_088 gabor_111    gabor_037 gabor_059_alt gabor_088_alt gabor_111     "1_23_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_037_059_088_111_target_position_1_4_retrieval_position_1"       gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_23_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_082 gabor_168 gabor_042 gabor_153    gabor_082 gabor_168 gabor_042_alt gabor_153_alt     "1_24_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_082_168_042_153_target_position_1_2_retrieval_position_1"       gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_24_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_084 gabor_012 gabor_051 gabor_122    gabor_084_alt gabor_012_alt gabor_051 gabor_122     "1_25_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_084_012_051_122_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_25_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1842  2992  2392      fixation_cross    gabor_026 gabor_134 gabor_005 gabor_162    gabor_026_alt gabor_134 gabor_005 gabor_162_alt     "1_26_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_026_134_005_162_target_position_2_3_retrieval_position_1"       gabor_076_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_26_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_076_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_134 gabor_069 gabor_047 gabor_089    gabor_134_alt gabor_069_alt gabor_047 gabor_089     "1_27_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_134_069_047_089_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_27_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_021 gabor_135 gabor_155 gabor_004    gabor_021_alt gabor_135 gabor_155_alt gabor_004     "1_28_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_021_135_155_004_target_position_2_4_retrieval_position_2"       gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_28_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_089 gabor_124 gabor_174 gabor_014    gabor_089 gabor_124_alt gabor_174 gabor_014_alt     "1_29_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_089_124_174_014_target_position_1_3_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_29_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_071 gabor_160 gabor_143 gabor_032    gabor_071_alt gabor_160 gabor_143 gabor_032_alt     "1_30_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_071_160_143_032_target_position_2_3_retrieval_position_2"       gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_30_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_128 gabor_155 gabor_070 gabor_001    gabor_128 gabor_155_alt gabor_070_alt gabor_001     "1_31_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_128_155_070_001_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_046_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_31_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_153 gabor_065 gabor_123 gabor_101    gabor_153_alt gabor_065 gabor_123_alt gabor_101     "1_32_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_153_065_123_101_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_32_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_012 gabor_093 gabor_067 gabor_130    gabor_012 gabor_093_alt gabor_067 gabor_130_alt     "1_33_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_012_093_067_130_target_position_1_3_retrieval_position_1"       gabor_147_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_33_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_103 gabor_080 gabor_041 gabor_065    gabor_103_alt gabor_080 gabor_041_alt gabor_065     "1_34_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_103_080_041_065_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_34_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  2092      fixation_cross    gabor_051 gabor_118 gabor_141 gabor_171    gabor_051 gabor_118_alt gabor_141_alt gabor_171     "1_35_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_051_118_141_171_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_35_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_141_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_020 gabor_091 gabor_132 gabor_047    gabor_020 gabor_091_alt gabor_132 gabor_047_alt     "1_36_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_020_091_132_047_target_position_1_3_retrieval_position_1"       gabor_020_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_36_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_173 gabor_099 gabor_152 gabor_117    gabor_173_alt gabor_099_alt gabor_152 gabor_117     "1_37_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_173_099_152_117_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_37_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_175 gabor_142 gabor_120 gabor_103    gabor_175_alt gabor_142 gabor_120_alt gabor_103     "1_38_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_175_142_120_103_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_103_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1842  2992  2342      fixation_cross    gabor_171 gabor_083 gabor_061 gabor_135    gabor_171 gabor_083 gabor_061_alt gabor_135_alt     "1_39_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_171_083_061_135_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_39_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_155 gabor_066 gabor_175 gabor_015    gabor_155 gabor_066_alt gabor_175_alt gabor_015     "1_40_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_155_066_175_015_target_position_1_4_retrieval_position_1"       gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_40_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_074 gabor_097 gabor_132 gabor_052    gabor_074 gabor_097_alt gabor_132_alt gabor_052     "1_41_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_074_097_132_052_target_position_1_4_retrieval_position_1"       gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_41_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_165 gabor_076 gabor_118 gabor_095    gabor_165 gabor_076 gabor_118_alt gabor_095_alt     "1_42_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_165_076_118_095_target_position_1_2_retrieval_position_1"       gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_42_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_042 gabor_103 gabor_119 gabor_058    gabor_042 gabor_103_alt gabor_119_alt gabor_058     "1_43_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_042_103_119_058_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_058_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_43_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_120 gabor_171 gabor_064 gabor_043    gabor_120_alt gabor_171 gabor_064 gabor_043_alt     "1_44_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_120_171_064_043_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_064_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_44_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1892  2992  2192      fixation_cross    gabor_085 gabor_123 gabor_146 gabor_068    gabor_085_alt gabor_123 gabor_146_alt gabor_068     "1_45_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_085_123_146_068_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_45_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_021 gabor_046 gabor_083 gabor_106    gabor_021_alt gabor_046_alt gabor_083 gabor_106     "1_46_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_021_046_083_106_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_154_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_46_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_098 gabor_029 gabor_139 gabor_076    gabor_098 gabor_029 gabor_139_alt gabor_076_alt     "1_47_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_098_029_139_076_target_position_1_2_retrieval_position_2"       gabor_circ gabor_165_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_47_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_046 gabor_027 gabor_159 gabor_081    gabor_046 gabor_027_alt gabor_159_alt gabor_081     "1_48_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_046_027_159_081_target_position_1_4_retrieval_position_1"       gabor_046_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_48_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_100 gabor_064 gabor_021 gabor_041    gabor_100 gabor_064 gabor_021_alt gabor_041_alt     "1_49_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_100_064_021_041_target_position_1_2_retrieval_position_1"       gabor_148_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_066 gabor_136 gabor_151 gabor_176    gabor_066 gabor_136_alt gabor_151_alt gabor_176     "1_50_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_066_136_151_176_target_position_1_4_retrieval_position_1"       gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_50_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_044 gabor_065 gabor_126 gabor_106    gabor_044_alt gabor_065_alt gabor_126 gabor_106     "1_51_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_044_065_126_106_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_51_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2242  2992  1942      fixation_cross    gabor_155 gabor_103 gabor_139 gabor_174    gabor_155_alt gabor_103 gabor_139 gabor_174_alt     "1_52_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_155_103_139_174_target_position_2_3_retrieval_position_1"       gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_52_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_016_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_081 gabor_155 gabor_021 gabor_043    gabor_081_alt gabor_155 gabor_021_alt gabor_043     "1_53_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_081_155_021_043_target_position_2_4_retrieval_position_2"       gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_53_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  2242      fixation_cross    gabor_130 gabor_101 gabor_058 gabor_178    gabor_130_alt gabor_101_alt gabor_058 gabor_178     "1_54_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_130_101_058_178_target_position_3_4_retrieval_position_2"       gabor_circ gabor_101_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_54_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_101_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  1892      fixation_cross    gabor_108 gabor_002 gabor_030 gabor_169    gabor_108 gabor_002_alt gabor_030 gabor_169_alt     "1_55_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_108_002_030_169_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_080_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_55_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_161 gabor_111 gabor_094 gabor_133    gabor_161 gabor_111_alt gabor_094 gabor_133_alt     "1_56_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_161_111_094_133_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_045_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_56_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_002 gabor_145 gabor_027 gabor_160    gabor_002 gabor_145_alt gabor_027_alt gabor_160     "1_57_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_002_145_027_160_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_57_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_004 gabor_077 gabor_141 gabor_032    gabor_004 gabor_077_alt gabor_141 gabor_032_alt     "1_58_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_004_077_141_032_target_position_1_3_retrieval_position_1"       gabor_053_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_58_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_068 gabor_052 gabor_006 gabor_121    gabor_068_alt gabor_052 gabor_006 gabor_121_alt     "1_59_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_068_052_006_121_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_006_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_59_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_021 gabor_067 gabor_051 gabor_002    gabor_021 gabor_067 gabor_051_alt gabor_002_alt     "1_60_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_021_067_051_002_target_position_1_2_retrieval_position_1"       gabor_021_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_60_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_020 gabor_178 gabor_101 gabor_134    gabor_020 gabor_178_alt gabor_101_alt gabor_134     "1_61_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_020_178_101_134_target_position_1_4_retrieval_position_1"       gabor_020_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_61_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_069 gabor_053 gabor_128 gabor_113    gabor_069 gabor_053_alt gabor_128 gabor_113_alt     "1_62_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_069_053_128_113_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_62_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  2392      fixation_cross    gabor_094 gabor_050 gabor_130 gabor_066    gabor_094 gabor_050_alt gabor_130 gabor_066_alt     "1_63_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2400_gabor_patch_orientation_094_050_130_066_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_63_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_066_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_175 gabor_107 gabor_088 gabor_066    gabor_175_alt gabor_107_alt gabor_088 gabor_066     "1_64_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_175_107_088_066_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_64_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  2292      fixation_cross    gabor_098 gabor_170 gabor_019 gabor_051    gabor_098 gabor_170_alt gabor_019_alt gabor_051     "1_65_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2300_gabor_patch_orientation_098_170_019_051_target_position_1_4_retrieval_position_2"       gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_65_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_035_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_139 gabor_081 gabor_050 gabor_119    gabor_139 gabor_081_alt gabor_050_alt gabor_119     "1_66_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_139_081_050_119_target_position_1_4_retrieval_position_1"       gabor_139_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_66_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_034 gabor_109 gabor_090 gabor_060    gabor_034 gabor_109_alt gabor_090_alt gabor_060     "1_67_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_034_109_090_060_target_position_1_4_retrieval_position_1"       gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_67_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_090 gabor_137 gabor_175 gabor_068    gabor_090_alt gabor_137 gabor_175 gabor_068_alt     "1_68_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_090_137_175_068_target_position_2_3_retrieval_position_2"       gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_68_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_050 gabor_019 gabor_128 gabor_155    gabor_050 gabor_019_alt gabor_128_alt gabor_155     "1_69_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_050_019_128_155_target_position_1_4_retrieval_position_1"       gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_69_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1992  2992  2442      fixation_cross    gabor_169 gabor_092 gabor_029 gabor_110    gabor_169_alt gabor_092 gabor_029 gabor_110_alt     "1_70_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2450_gabor_patch_orientation_169_092_029_110_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_110_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_70_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_110_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  