# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;   
	  bitmap fixation_cross_black; x=0; y=0;   
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_171 gabor_032 gabor_065 gabor_085    gabor_171 gabor_032_alt gabor_065 gabor_085_alt      "1_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_171_032_065_085_target_position_1_3_retrieval_position_1"       gabor_122_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_089 gabor_146 gabor_040 gabor_022    gabor_089 gabor_146_alt gabor_040 gabor_022_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_089_146_040_022_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_040_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_033 gabor_082 gabor_111 gabor_170    gabor_033_alt gabor_082 gabor_111 gabor_170_alt      "1_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_033_082_111_170_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2092  2992  2142      fixation_cross    gabor_112 gabor_080 gabor_142 gabor_023    gabor_112 gabor_080_alt gabor_142 gabor_023_alt      "1_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_112_080_142_023_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_160_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_160 gabor_178 gabor_131 gabor_050    gabor_160_alt gabor_178_alt gabor_131 gabor_050      "1_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_160_178_131_050_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_068 gabor_046 gabor_155 gabor_090    gabor_068 gabor_046_alt gabor_155 gabor_090_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_068_046_155_090_target_position_1_3_retrieval_position_1"       gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_031 gabor_173 gabor_010 gabor_054    gabor_031_alt gabor_173 gabor_010_alt gabor_054      "1_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_031_173_010_054_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_175 gabor_060 gabor_012 gabor_092    gabor_175 gabor_060_alt gabor_012 gabor_092_alt      "1_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_175_060_012_092_target_position_1_3_retrieval_position_1"       gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_050 gabor_073 gabor_108 gabor_178    gabor_050 gabor_073 gabor_108_alt gabor_178_alt      "1_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_050_073_108_178_target_position_1_2_retrieval_position_1"       gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_154 gabor_015 gabor_170 gabor_132    gabor_154 gabor_015_alt gabor_170 gabor_132_alt     "1_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_154_015_170_132_target_position_1_3_retrieval_position_1"       gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_164 gabor_118 gabor_052 gabor_079    gabor_164 gabor_118_alt gabor_052_alt gabor_079     "1_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_164_118_052_079_target_position_1_4_retrieval_position_1"       gabor_164_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_007 gabor_029 gabor_051 gabor_159    gabor_007_alt gabor_029 gabor_051 gabor_159_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_007_029_051_159_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_051_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1842  2992  2092      fixation_cross    gabor_066 gabor_116 gabor_047 gabor_007    gabor_066 gabor_116 gabor_047_alt gabor_007_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2100_gabor_patch_orientation_066_116_047_007_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_047_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_122 gabor_008 gabor_056 gabor_167    gabor_122_alt gabor_008 gabor_056_alt gabor_167     "1_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_122_008_056_167_target_position_2_4_retrieval_position_2"       gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_077 gabor_098 gabor_126 gabor_021    gabor_077_alt gabor_098 gabor_126 gabor_021_alt     "1_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_077_098_126_021_target_position_2_3_retrieval_position_2"       gabor_circ gabor_051_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_055 gabor_017 gabor_076 gabor_144    gabor_055 gabor_017_alt gabor_076_alt gabor_144     "1_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_055_017_076_144_target_position_1_4_retrieval_position_1"       gabor_102_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_007 gabor_065 gabor_050 gabor_138    gabor_007_alt gabor_065_alt gabor_050 gabor_138     "1_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_007_065_050_138_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2592      fixation_cross    gabor_173 gabor_038 gabor_111 gabor_147    gabor_173 gabor_038_alt gabor_111_alt gabor_147     "1_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2600_gabor_patch_orientation_173_038_111_147_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_023 gabor_176 gabor_150 gabor_068    gabor_023_alt gabor_176_alt gabor_150 gabor_068     "1_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_023_176_150_068_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_001 gabor_153 gabor_108 gabor_134    gabor_001_alt gabor_153 gabor_108_alt gabor_134     "1_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_001_153_108_134_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2192  2992  2042      fixation_cross    gabor_014 gabor_044 gabor_123 gabor_179    gabor_014_alt gabor_044_alt gabor_123 gabor_179     "1_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_014_044_123_179_target_position_3_4_retrieval_position_1"       gabor_014_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_014_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_163 gabor_053 gabor_080 gabor_121    gabor_163_alt gabor_053 gabor_080 gabor_121_alt     "1_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_163_053_080_121_target_position_2_3_retrieval_position_2"       gabor_circ gabor_053_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_163 gabor_144 gabor_003 gabor_025    gabor_163_alt gabor_144 gabor_003_alt gabor_025     "1_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_163_144_003_025_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_091 gabor_115 gabor_009 gabor_074    gabor_091_alt gabor_115 gabor_009_alt gabor_074     "1_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_091_115_009_074_target_position_2_4_retrieval_position_2"       gabor_circ gabor_163_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2092  2992  2242      fixation_cross    gabor_095 gabor_043 gabor_068 gabor_153    gabor_095_alt gabor_043_alt gabor_068 gabor_153     "1_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_095_043_068_153_target_position_3_4_retrieval_position_2"       gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_067 gabor_173 gabor_003 gabor_039    gabor_067 gabor_173_alt gabor_003 gabor_039_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_067_173_003_039_target_position_1_3_retrieval_position_1"       gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_109 gabor_061 gabor_177 gabor_040    gabor_109_alt gabor_061_alt gabor_177 gabor_040     "1_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_109_061_177_040_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_040_framed    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_100 gabor_123 gabor_081 gabor_162    gabor_100_alt gabor_123_alt gabor_081 gabor_162     "1_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_100_123_081_162_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2442      fixation_cross    gabor_155 gabor_126 gabor_002 gabor_171    gabor_155_alt gabor_126_alt gabor_002 gabor_171     "1_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2450_gabor_patch_orientation_155_126_002_171_target_position_3_4_retrieval_position_1"       gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_031 gabor_106 gabor_074 gabor_147    gabor_031_alt gabor_106 gabor_074_alt gabor_147     "1_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_031_106_074_147_target_position_2_4_retrieval_position_2"       gabor_circ gabor_058_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_180 gabor_022 gabor_094 gabor_051    gabor_180 gabor_022_alt gabor_094_alt gabor_051     "1_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_180_022_094_051_target_position_1_4_retrieval_position_1"       gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2592      fixation_cross    gabor_154 gabor_072 gabor_118 gabor_135    gabor_154_alt gabor_072 gabor_118_alt gabor_135     "1_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_154_072_118_135_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_088_framed    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_088 gabor_132 gabor_021 gabor_001    gabor_088 gabor_132_alt gabor_021 gabor_001_alt     "1_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_088_132_021_001_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_178 gabor_148 gabor_124 gabor_096    gabor_178 gabor_148 gabor_124_alt gabor_096_alt     "1_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_178_148_124_096_target_position_1_2_retrieval_position_1"       gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  2042      fixation_cross    gabor_146 gabor_162 gabor_013 gabor_089    gabor_146 gabor_162 gabor_013_alt gabor_089_alt     "1_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_146_162_013_089_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_040_framed    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2442      fixation_cross    gabor_089 gabor_012 gabor_135 gabor_173    gabor_089_alt gabor_012 gabor_135_alt gabor_173     "1_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_089_012_135_173_target_position_2_4_retrieval_position_2"       gabor_circ gabor_012_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_155 gabor_008 gabor_045 gabor_089    gabor_155_alt gabor_008_alt gabor_045 gabor_089     "1_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_155_008_045_089_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_069 gabor_115 gabor_092 gabor_054    gabor_069_alt gabor_115 gabor_092 gabor_054_alt     "1_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_069_115_092_054_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_148 gabor_043 gabor_118 gabor_180    gabor_148 gabor_043 gabor_118_alt gabor_180_alt     "1_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_148_043_118_180_target_position_1_2_retrieval_position_1"       gabor_099_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_164 gabor_027 gabor_106 gabor_081    gabor_164_alt gabor_027 gabor_106 gabor_081_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_164_027_106_081_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_106_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_037 gabor_055 gabor_095 gabor_126    gabor_037_alt gabor_055_alt gabor_095 gabor_126     "1_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_037_055_095_126_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_094 gabor_072 gabor_005 gabor_057    gabor_094_alt gabor_072 gabor_005_alt gabor_057     "1_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_094_072_005_057_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_041 gabor_095 gabor_171 gabor_056    gabor_041 gabor_095_alt gabor_171_alt gabor_056     "1_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_041_095_171_056_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_039 gabor_177 gabor_158 gabor_102    gabor_039_alt gabor_177_alt gabor_158 gabor_102     "1_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_039_177_158_102_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2592      fixation_cross    gabor_074 gabor_094 gabor_131 gabor_115    gabor_074_alt gabor_094_alt gabor_131 gabor_115     "1_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_074_094_131_115_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_112 gabor_093 gabor_032 gabor_179    gabor_112 gabor_093 gabor_032_alt gabor_179_alt     "1_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_112_093_032_179_target_position_1_2_retrieval_position_2"       gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2092  2992  1992      fixation_cross    gabor_034 gabor_094 gabor_054 gabor_018    gabor_034_alt gabor_094_alt gabor_054 gabor_018     "1_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_034_094_054_018_target_position_3_4_retrieval_position_1"       gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2242      fixation_cross    gabor_063 gabor_041 gabor_152 gabor_173    gabor_063 gabor_041_alt gabor_152 gabor_173_alt     "1_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_063_041_152_173_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_012_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_154 gabor_049 gabor_136 gabor_018    gabor_154 gabor_049_alt gabor_136 gabor_018_alt     "1_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_154_049_136_018_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_040 gabor_112 gabor_006 gabor_023    gabor_040 gabor_112_alt gabor_006_alt gabor_023     "1_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_040_112_006_023_target_position_1_4_retrieval_position_1"       gabor_176_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  1892      fixation_cross    gabor_069 gabor_039 gabor_159 gabor_176    gabor_069_alt gabor_039_alt gabor_159 gabor_176     "1_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_069_039_159_176_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2392      fixation_cross    gabor_036 gabor_123 gabor_055 gabor_168    gabor_036_alt gabor_123_alt gabor_055 gabor_168     "1_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_036_123_055_168_target_position_3_4_retrieval_position_1"       gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_017 gabor_179 gabor_032 gabor_137    gabor_017 gabor_179 gabor_032_alt gabor_137_alt     "1_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_017_179_032_137_target_position_1_2_retrieval_position_1"       gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2042  2992  2342      fixation_cross    gabor_070 gabor_155 gabor_004 gabor_027    gabor_070 gabor_155 gabor_004_alt gabor_027_alt     "1_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_070_155_004_027_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_004_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_175 gabor_022 gabor_158 gabor_042    gabor_175_alt gabor_022 gabor_158_alt gabor_042     "1_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_175_022_158_042_target_position_2_4_retrieval_position_2"       gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_033 gabor_005 gabor_160 gabor_083    gabor_033_alt gabor_005 gabor_160 gabor_083_alt     "1_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_033_005_160_083_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_160_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_130 gabor_064 gabor_154 gabor_016    gabor_130 gabor_064_alt gabor_154_alt gabor_016     "1_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_130_064_154_016_target_position_1_4_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_042 gabor_074 gabor_123 gabor_096    gabor_042 gabor_074_alt gabor_123 gabor_096_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_042_074_123_096_target_position_1_3_retrieval_position_1"       gabor_042_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_007 gabor_088 gabor_171 gabor_056    gabor_007 gabor_088_alt gabor_171 gabor_056_alt     "1_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_007_088_171_056_target_position_1_3_retrieval_position_1"       gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_156 gabor_135 gabor_004 gabor_180    gabor_156 gabor_135 gabor_004_alt gabor_180_alt     "1_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_156_135_004_180_target_position_1_2_retrieval_position_1"       gabor_156_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_060 gabor_133 gabor_016 gabor_045    gabor_060 gabor_133_alt gabor_016_alt gabor_045     "1_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_060_133_016_045_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_138 gabor_018 gabor_079 gabor_097    gabor_138_alt gabor_018 gabor_079_alt gabor_097     "1_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_138_018_079_097_target_position_2_4_retrieval_position_2"       gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1892  2992  2242      fixation_cross    gabor_148 gabor_069 gabor_001 gabor_113    gabor_148_alt gabor_069_alt gabor_001 gabor_113     "1_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_148_069_001_113_target_position_3_4_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_023_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_151 gabor_077 gabor_043 gabor_104    gabor_151 gabor_077_alt gabor_043_alt gabor_104     "1_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_151_077_043_104_target_position_1_4_retrieval_position_1"       gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2192  2992  2092      fixation_cross    gabor_005 gabor_028 gabor_084 gabor_117    gabor_005 gabor_028 gabor_084_alt gabor_117_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_005_028_084_117_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_165_framed    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_165_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_127 gabor_050 gabor_174 gabor_067    gabor_127 gabor_050_alt gabor_174_alt gabor_067     "1_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_127_050_174_067_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_141 gabor_119 gabor_087 gabor_054    gabor_141 gabor_119_alt gabor_087 gabor_054_alt     "1_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_141_119_087_054_target_position_1_3_retrieval_position_1"       gabor_141_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_101 gabor_081 gabor_055 gabor_024    gabor_101_alt gabor_081 gabor_055 gabor_024_alt     "1_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_101_081_055_024_target_position_2_3_retrieval_position_2"       gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1792  2992  2342      fixation_cross    gabor_159 gabor_082 gabor_050 gabor_137    gabor_159 gabor_082_alt gabor_050 gabor_137_alt     "1_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_159_082_050_137_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_002_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_094 gabor_039 gabor_171 gabor_062    gabor_094_alt gabor_039_alt gabor_171 gabor_062     "1_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_094_039_171_062_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_062_framed    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
 
};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  