# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_174 gabor_040 gabor_112 gabor_001    gabor_174_alt gabor_040_alt gabor_112 gabor_001      "1_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_174_040_112_001_target_position_1_2_retrieval_position_1"          gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_127 gabor_012 gabor_176 gabor_070    gabor_127_alt gabor_012 gabor_176_alt gabor_070      "1_2_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_127_012_176_070_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_117 gabor_170 gabor_007 gabor_055    gabor_117_alt gabor_170 gabor_007_alt gabor_055      "1_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_117_170_007_055_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1842  2992  2242      fixation_cross    gabor_174 gabor_158 gabor_043 gabor_018    gabor_174 gabor_158_alt gabor_043_alt gabor_018      "1_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_174_158_043_018_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_068_framed    blank blank blank blank    fixation_cross_target_position_2_3     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_068_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_064 gabor_040 gabor_001 gabor_080    gabor_064_alt gabor_040_alt gabor_001 gabor_080      "1_5_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_064_040_001_080_target_position_1_2_retrieval_position_1"          gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_113 gabor_135 gabor_049 gabor_169    gabor_113 gabor_135 gabor_049_alt gabor_169_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_113_135_049_169_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_target_position_3_4     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_132 gabor_063 gabor_046 gabor_151    gabor_132 gabor_063 gabor_046_alt gabor_151_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_132_063_046_151_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_038 gabor_057 gabor_127 gabor_018    gabor_038 gabor_057_alt gabor_127_alt gabor_018      "1_8_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_038_057_127_018_target_position_2_3_retrieval_position_2"          gabor_circ gabor_102_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2092  2992  2292      fixation_cross    gabor_092 gabor_111 gabor_043 gabor_179    gabor_092_alt gabor_111 gabor_043_alt gabor_179      "1_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_092_111_043_179_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_132_framed    blank blank blank blank    fixation_cross_target_position_1_3     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_132_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_032 gabor_047 gabor_100 gabor_171    gabor_032_alt gabor_047_alt gabor_100 gabor_171     "1_10_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_032_047_100_171_target_position_1_2_retrieval_position_1"          gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_053 gabor_089 gabor_142 gabor_172    gabor_053_alt gabor_089 gabor_142 gabor_172_alt     "1_11_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_053_089_142_172_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_122_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_045 gabor_157 gabor_016 gabor_132    gabor_045 gabor_157_alt gabor_016 gabor_132_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_045_157_016_132_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_086 gabor_045 gabor_111 gabor_067    gabor_086_alt gabor_045 gabor_111 gabor_067_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_086_045_111_067_target_position_1_4_retrieval_position_1"          gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_128 gabor_018 gabor_040 gabor_002    gabor_128 gabor_018 gabor_040_alt gabor_002_alt     "1_14_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_128_018_040_002_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2042      fixation_cross    gabor_071 gabor_158 gabor_026 gabor_047    gabor_071_alt gabor_158 gabor_026_alt gabor_047     "1_15_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_071_158_026_047_target_position_1_3_retrieval_position_2"          gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_123 gabor_167 gabor_017 gabor_082    gabor_123_alt gabor_167 gabor_017 gabor_082_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_123_167_017_082_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_136 gabor_051 gabor_157 gabor_116    gabor_136_alt gabor_051 gabor_157 gabor_116_alt     "1_17_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_136_051_157_116_target_position_1_4_retrieval_position_1"          gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_092 gabor_148 gabor_113 gabor_171    gabor_092 gabor_148_alt gabor_113_alt gabor_171     "1_18_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_092_148_113_171_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_065_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_012 gabor_128 gabor_164 gabor_102    gabor_012 gabor_128_alt gabor_164 gabor_102_alt     "1_19_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_012_128_164_102_target_position_2_4_retrieval_position_2"          gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2392      fixation_cross    gabor_123 gabor_079 gabor_143 gabor_004    gabor_123 gabor_079_alt gabor_143 gabor_004_alt     "1_20_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2400_gabor_patch_orientation_123_079_143_004_target_position_2_4_retrieval_position_1"          gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_128 gabor_053 gabor_111 gabor_168    gabor_128 gabor_053_alt gabor_111 gabor_168_alt     "1_21_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_128_053_111_168_target_position_2_4_retrieval_position_2"          gabor_circ gabor_005_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_168 gabor_143 gabor_029 gabor_058    gabor_168 gabor_143_alt gabor_029_alt gabor_058     "1_22_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_168_143_029_058_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_029_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_086 gabor_110 gabor_064 gabor_169    gabor_086 gabor_110 gabor_064_alt gabor_169_alt     "1_23_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_086_110_064_169_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_022 gabor_143 gabor_003 gabor_158    gabor_022_alt gabor_143_alt gabor_003 gabor_158     "1_24_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_022_143_003_158_target_position_1_2_retrieval_position_1"          gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2142  2992  1992      fixation_cross    gabor_115 gabor_097 gabor_080 gabor_056    gabor_115 gabor_097 gabor_080_alt gabor_056_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2000_gabor_patch_orientation_115_097_080_056_target_position_3_4_retrieval_position_1"          gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_165_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_003 gabor_169 gabor_129 gabor_148    gabor_003 gabor_169_alt gabor_129_alt gabor_148     "1_26_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_003_169_129_148_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_081_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_079 gabor_136 gabor_164 gabor_021    gabor_079 gabor_136_alt gabor_164 gabor_021_alt     "1_27_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_079_136_164_021_target_position_2_4_retrieval_position_2"          gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_129 gabor_094 gabor_163 gabor_073    gabor_129 gabor_094 gabor_163_alt gabor_073_alt     "1_28_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_129_094_163_073_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_073_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_069 gabor_149 gabor_027 gabor_044    gabor_069_alt gabor_149 gabor_027 gabor_044_alt     "1_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_069_149_027_044_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_066 gabor_180 gabor_100 gabor_042    gabor_066 gabor_180_alt gabor_100_alt gabor_042     "1_30_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_066_180_100_042_target_position_2_3_retrieval_position_2"          gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_174 gabor_019 gabor_003 gabor_051    gabor_174 gabor_019_alt gabor_003_alt gabor_051     "1_31_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_174_019_003_051_target_position_2_3_retrieval_position_2"          gabor_circ gabor_019_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_136 gabor_095 gabor_031 gabor_050    gabor_136_alt gabor_095 gabor_031_alt gabor_050     "1_32_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_136_095_031_050_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_169_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2592      fixation_cross    gabor_111 gabor_130 gabor_063 gabor_178    gabor_111 gabor_130_alt gabor_063_alt gabor_178     "1_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2600_gabor_patch_orientation_111_130_063_178_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_178_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_116 gabor_054 gabor_132 gabor_173    gabor_116 gabor_054 gabor_132_alt gabor_173_alt     "1_34_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_116_054_132_173_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1992  2992  2192      fixation_cross    gabor_054 gabor_116 gabor_094 gabor_160    gabor_054_alt gabor_116 gabor_094 gabor_160_alt     "1_35_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_054_116_094_160_target_position_1_4_retrieval_position_2"          gabor_circ gabor_071_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_071_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_066 gabor_109 gabor_149 gabor_178    gabor_066 gabor_109 gabor_149_alt gabor_178_alt     "1_36_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_066_109_149_178_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2392      fixation_cross    gabor_149 gabor_088 gabor_166 gabor_133    gabor_149 gabor_088_alt gabor_166_alt gabor_133     "1_37_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_149_088_166_133_target_position_2_3_retrieval_position_2"          gabor_circ gabor_088_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_046 gabor_089 gabor_009 gabor_169    gabor_046 gabor_089_alt gabor_009 gabor_169_alt     "1_38_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_046_089_009_169_target_position_2_4_retrieval_position_2"          gabor_circ gabor_134_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2442      fixation_cross    gabor_094 gabor_165 gabor_018 gabor_076    gabor_094_alt gabor_165_alt gabor_018 gabor_076     "1_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_094_165_018_076_target_position_1_2_retrieval_position_1"          gabor_094_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2042      fixation_cross    gabor_076 gabor_115 gabor_057 gabor_137    gabor_076 gabor_115_alt gabor_057_alt gabor_137     "1_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_076_115_057_137_target_position_2_3_retrieval_position_1"          gabor_030_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_109 gabor_026 gabor_051 gabor_178    gabor_109_alt gabor_026 gabor_051 gabor_178_alt     "1_41_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_109_026_051_178_target_position_1_4_retrieval_position_1"          gabor_157_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_131 gabor_049 gabor_171 gabor_093    gabor_131_alt gabor_049_alt gabor_171 gabor_093     "1_42_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_131_049_171_093_target_position_1_2_retrieval_position_2"          gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_011 gabor_045 gabor_085 gabor_165    gabor_011 gabor_045 gabor_085_alt gabor_165_alt     "1_43_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_011_045_085_165_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_135 gabor_086 gabor_161 gabor_007    gabor_135_alt gabor_086 gabor_161_alt gabor_007     "1_44_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_135_086_161_007_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_025 gabor_088 gabor_155 gabor_045    gabor_025_alt gabor_088_alt gabor_155 gabor_045     "1_45_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_025_088_155_045_target_position_1_2_retrieval_position_1"          gabor_072_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_003 gabor_160 gabor_113 gabor_085    gabor_003 gabor_160 gabor_113_alt gabor_085_alt     "1_46_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_003_160_113_085_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_058 gabor_112 gabor_136 gabor_022    gabor_058 gabor_112 gabor_136_alt gabor_022_alt     "1_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_058_112_136_022_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2042  2992  2542      fixation_cross    gabor_109 gabor_130 gabor_088 gabor_173    gabor_109 gabor_130_alt gabor_088 gabor_173_alt     "1_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2550_gabor_patch_orientation_109_130_088_173_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_027 gabor_049 gabor_168 gabor_107    gabor_027_alt gabor_049_alt gabor_168 gabor_107     "1_49_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_027_049_168_107_target_position_1_2_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_092 gabor_015 gabor_064 gabor_047    gabor_092_alt gabor_015_alt gabor_064 gabor_047     "1_50_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_092_015_064_047_target_position_1_2_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2042  2992  1892      fixation_cross    gabor_002 gabor_092 gabor_158 gabor_023    gabor_002_alt gabor_092 gabor_158 gabor_023_alt     "1_51_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_1900_gabor_patch_orientation_002_092_158_023_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_078 gabor_063 gabor_039 gabor_105    gabor_078_alt gabor_063_alt gabor_039 gabor_105     "1_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_078_063_039_105_target_position_1_2_retrieval_position_1"          gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_068 gabor_016 gabor_047 gabor_131    gabor_068 gabor_016_alt gabor_047_alt gabor_131     "1_53_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_068_016_047_131_target_position_2_3_retrieval_position_2"          gabor_circ gabor_153_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2242  2992  1892      fixation_cross    gabor_164 gabor_114 gabor_031 gabor_137    gabor_164_alt gabor_114_alt gabor_031 gabor_137     "1_54_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_1900_gabor_patch_orientation_164_114_031_137_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_137_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_066 gabor_027 gabor_084 gabor_007    gabor_066_alt gabor_027_alt gabor_084 gabor_007     "1_55_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_066_027_084_007_target_position_1_2_retrieval_position_1"          gabor_066_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_163 gabor_050 gabor_001 gabor_120    gabor_163_alt gabor_050 gabor_001_alt gabor_120     "1_56_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_163_050_001_120_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_078 gabor_009 gabor_145 gabor_114    gabor_078 gabor_009_alt gabor_145 gabor_114_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_078_009_145_114_target_position_2_4_retrieval_position_2"          gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_114 gabor_133 gabor_004 gabor_074    gabor_114 gabor_133_alt gabor_004 gabor_074_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_114_133_004_074_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_165 gabor_116 gabor_050 gabor_026    gabor_165 gabor_116 gabor_050_alt gabor_026_alt     "1_59_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_165_116_050_026_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_136 gabor_083 gabor_067 gabor_117    gabor_136_alt gabor_083 gabor_067_alt gabor_117     "1_60_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_136_083_067_117_target_position_1_3_retrieval_position_1"          gabor_136_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2492      fixation_cross    gabor_156 gabor_050 gabor_120 gabor_030    gabor_156_alt gabor_050_alt gabor_120 gabor_030     "1_61_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_156_050_120_030_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_080_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_006 gabor_053 gabor_172 gabor_086    gabor_006_alt gabor_053 gabor_172_alt gabor_086     "1_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_006_053_172_086_target_position_1_3_retrieval_position_1"          gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_180 gabor_060 gabor_124 gabor_106    gabor_180_alt gabor_060_alt gabor_124 gabor_106     "1_63_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_180_060_124_106_target_position_1_2_retrieval_position_1"          gabor_041_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_011 gabor_083 gabor_041 gabor_121    gabor_011 gabor_083_alt gabor_041 gabor_121_alt     "1_64_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_011_083_041_121_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_121_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_009 gabor_097 gabor_176 gabor_129    gabor_009 gabor_097_alt gabor_176_alt gabor_129     "1_65_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_009_097_176_129_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_119 gabor_178 gabor_031 gabor_144    gabor_119 gabor_178 gabor_031_alt gabor_144_alt     "1_66_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_119_178_031_144_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_024 gabor_043 gabor_113 gabor_074    gabor_024_alt gabor_043_alt gabor_113 gabor_074     "1_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_024_043_113_074_target_position_1_2_retrieval_position_1"          gabor_024_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  1942      fixation_cross    gabor_089 gabor_046 gabor_074 gabor_122    gabor_089_alt gabor_046 gabor_074_alt gabor_122     "1_68_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_089_046_074_122_target_position_1_3_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_037 gabor_020 gabor_052 gabor_166    gabor_037_alt gabor_020 gabor_052 gabor_166_alt     "1_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_037_020_052_166_target_position_1_4_retrieval_position_1"          gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2242  2992  2492      fixation_cross    gabor_079 gabor_142 gabor_122 gabor_017    gabor_079 gabor_142_alt gabor_122 gabor_017_alt     "1_70_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2500_gabor_patch_orientation_079_142_122_017_target_position_2_4_retrieval_position_1"          gabor_079_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_079_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  