# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_092 gabor_048 gabor_130 gabor_163    gabor_092 gabor_048_alt gabor_130 gabor_163_alt      "1_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_092_048_130_163_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_097 gabor_079 gabor_035 gabor_156    gabor_097 gabor_079 gabor_035_alt gabor_156_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_097_079_035_156_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2442      fixation_cross    gabor_055 gabor_138 gabor_114 gabor_028    gabor_055 gabor_138 gabor_114_alt gabor_028_alt      "1_3_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_055_138_114_028_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_069 gabor_151 gabor_031 gabor_009    gabor_069_alt gabor_151_alt gabor_031 gabor_009      "1_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_069_151_031_009_target_position_1_2_retrieval_position_1"          gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2142  2992  1942      fixation_cross    gabor_153 gabor_109 gabor_001 gabor_125    gabor_153 gabor_109_alt gabor_001_alt gabor_125      "1_5_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_153_109_001_125_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_048 gabor_107 gabor_176 gabor_019    gabor_048 gabor_107 gabor_176_alt gabor_019_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_048_107_176_019_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2592      fixation_cross    gabor_101 gabor_133 gabor_171 gabor_014    gabor_101_alt gabor_133 gabor_171 gabor_014_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_101_133_171_014_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_070 gabor_136 gabor_158 gabor_028    gabor_070_alt gabor_136 gabor_158_alt gabor_028      "1_8_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_070_136_158_028_target_position_1_3_retrieval_position_1"          gabor_070_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_150 gabor_014 gabor_173 gabor_040    gabor_150 gabor_014_alt gabor_173_alt gabor_040      "1_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_150_014_173_040_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2592      fixation_cross    gabor_110 gabor_154 gabor_083 gabor_044    gabor_110 gabor_154_alt gabor_083_alt gabor_044     "1_10_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_110_154_083_044_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_125 gabor_050 gabor_140 gabor_020    gabor_125 gabor_050_alt gabor_140 gabor_020_alt     "1_11_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_125_050_140_020_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_020_framed    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_127 gabor_038 gabor_109 gabor_073    gabor_127_alt gabor_038 gabor_109_alt gabor_073     "1_12_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_127_038_109_073_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_157_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2192  2992  2242      fixation_cross    gabor_045 gabor_106 gabor_131 gabor_070    gabor_045_alt gabor_106_alt gabor_131 gabor_070     "1_13_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2250_gabor_patch_orientation_045_106_131_070_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_070_framed    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_070_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_155 gabor_048 gabor_112 gabor_128    gabor_155 gabor_048_alt gabor_112_alt gabor_128     "1_14_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_155_048_112_128_target_position_2_3_retrieval_position_2"          gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_128 gabor_164 gabor_110 gabor_093    gabor_128 gabor_164_alt gabor_110 gabor_093_alt     "1_15_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_128_164_110_093_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2392      fixation_cross    gabor_028 gabor_001 gabor_069 gabor_180    gabor_028_alt gabor_001 gabor_069 gabor_180_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_028_001_069_180_target_position_1_4_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_008 gabor_161 gabor_073 gabor_051    gabor_008 gabor_161 gabor_073_alt gabor_051_alt     "1_17_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_008_161_073_051_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_073_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_032 gabor_072 gabor_145 gabor_117    gabor_032 gabor_072 gabor_145_alt gabor_117_alt     "1_18_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_032_072_145_117_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_145_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_067 gabor_178 gabor_152 gabor_018    gabor_067_alt gabor_178_alt gabor_152 gabor_018     "1_19_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_067_178_152_018_target_position_1_2_retrieval_position_2"          gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_091 gabor_174 gabor_060 gabor_112    gabor_091_alt gabor_174 gabor_060_alt gabor_112     "1_20_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_091_174_060_112_target_position_1_3_retrieval_position_1"          gabor_137_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_104 gabor_146 gabor_061 gabor_176    gabor_104 gabor_146_alt gabor_061 gabor_176_alt     "1_21_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_104_146_061_176_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_143 gabor_091 gabor_057 gabor_119    gabor_143 gabor_091_alt gabor_057 gabor_119_alt     "1_22_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_143_091_057_119_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  2142      fixation_cross    gabor_149 gabor_089 gabor_060 gabor_106    gabor_149_alt gabor_089 gabor_060_alt gabor_106     "1_23_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_149_089_060_106_target_position_1_3_retrieval_position_2"          gabor_circ gabor_089_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_123 gabor_089 gabor_167 gabor_146    gabor_123 gabor_089_alt gabor_167 gabor_146_alt     "1_24_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_123_089_167_146_target_position_2_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_139 gabor_082 gabor_109 gabor_161    gabor_139 gabor_082 gabor_109_alt gabor_161_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_139_082_109_161_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_162 gabor_094 gabor_139 gabor_116    gabor_162 gabor_094_alt gabor_139 gabor_116_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_162_094_139_116_target_position_2_4_retrieval_position_2"          gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_040 gabor_151 gabor_170 gabor_080    gabor_040_alt gabor_151_alt gabor_170 gabor_080     "1_27_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_040_151_170_080_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_089 gabor_001 gabor_018 gabor_052    gabor_089_alt gabor_001_alt gabor_018 gabor_052     "1_28_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_089_001_018_052_target_position_1_2_retrieval_position_1"          gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1942  2992  2192      fixation_cross    gabor_011 gabor_098 gabor_151 gabor_174    gabor_011 gabor_098_alt gabor_151_alt gabor_174     "1_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2200_gabor_patch_orientation_011_098_151_174_target_position_2_3_retrieval_position_1"          gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  1892      fixation_cross    gabor_123 gabor_044 gabor_180 gabor_005    gabor_123_alt gabor_044_alt gabor_180 gabor_005     "1_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_123_044_180_005_target_position_1_2_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_144 gabor_113 gabor_068 gabor_037    gabor_144 gabor_113 gabor_068_alt gabor_037_alt     "1_31_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_144_113_068_037_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_168 gabor_001 gabor_134 gabor_091    gabor_168 gabor_001_alt gabor_134 gabor_091_alt     "1_32_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_168_001_134_091_target_position_2_4_retrieval_position_2"          gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_098 gabor_055 gabor_131 gabor_176    gabor_098_alt gabor_055_alt gabor_131 gabor_176     "1_33_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_098_055_131_176_target_position_1_2_retrieval_position_2"          gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1942  2992  2142      fixation_cross    gabor_039 gabor_016 gabor_175 gabor_068    gabor_039 gabor_016 gabor_175_alt gabor_068_alt     "1_34_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2150_gabor_patch_orientation_039_016_175_068_target_position_3_4_retrieval_position_1"          gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_059 gabor_092 gabor_113 gabor_032    gabor_059 gabor_092_alt gabor_113_alt gabor_032     "1_35_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_059_092_113_032_target_position_2_3_retrieval_position_2"          gabor_circ gabor_092_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_050 gabor_014 gabor_155 gabor_129    gabor_050_alt gabor_014_alt gabor_155 gabor_129     "1_36_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_050_014_155_129_target_position_1_2_retrieval_position_1"          gabor_100_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2592      fixation_cross    gabor_169 gabor_098 gabor_139 gabor_124    gabor_169 gabor_098_alt gabor_139 gabor_124_alt     "1_37_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_169_098_139_124_target_position_2_4_retrieval_position_2"          gabor_circ gabor_052_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_019 gabor_143 gabor_167 gabor_054    gabor_019_alt gabor_143_alt gabor_167 gabor_054     "1_38_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_019_143_167_054_target_position_1_2_retrieval_position_2"          gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_136 gabor_064 gabor_003 gabor_027    gabor_136_alt gabor_064 gabor_003 gabor_027_alt     "1_39_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_136_064_003_027_target_position_1_4_retrieval_position_1"          gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_003 gabor_028 gabor_140 gabor_118    gabor_003 gabor_028 gabor_140_alt gabor_118_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_003_028_140_118_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_164_framed    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_157 gabor_041 gabor_075 gabor_110    gabor_157 gabor_041_alt gabor_075_alt gabor_110     "1_41_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_157_041_075_110_target_position_2_3_retrieval_position_2"          gabor_circ gabor_041_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_177 gabor_044 gabor_155 gabor_019    gabor_177_alt gabor_044 gabor_155_alt gabor_019     "1_42_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_177_044_155_019_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_106_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2142  2992  2392      fixation_cross    gabor_118 gabor_101 gabor_151 gabor_040    gabor_118 gabor_101_alt gabor_151_alt gabor_040     "1_43_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2400_gabor_patch_orientation_118_101_151_040_target_position_2_3_retrieval_position_1"          gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_151 gabor_074 gabor_008 gabor_134    gabor_151_alt gabor_074_alt gabor_008 gabor_134     "1_44_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_151_074_008_134_target_position_1_2_retrieval_position_2"          gabor_circ gabor_074_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_160 gabor_088 gabor_054 gabor_005    gabor_160_alt gabor_088_alt gabor_054 gabor_005     "1_45_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_160_088_054_005_target_position_1_2_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  1892      fixation_cross    gabor_029 gabor_136 gabor_087 gabor_118    gabor_029_alt gabor_136_alt gabor_087 gabor_118     "1_46_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_029_136_087_118_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_062 gabor_169 gabor_090 gabor_118    gabor_062 gabor_169_alt gabor_090_alt gabor_118     "1_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_062_169_090_118_target_position_2_3_retrieval_position_2"          gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_175 gabor_041 gabor_096 gabor_154    gabor_175_alt gabor_041 gabor_096 gabor_154_alt     "1_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_175_041_096_154_target_position_1_4_retrieval_position_1"          gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_078 gabor_059 gabor_149 gabor_122    gabor_078 gabor_059_alt gabor_149 gabor_122_alt     "1_49_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_078_059_149_122_target_position_2_4_retrieval_position_2"          gabor_circ gabor_059_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  2292      fixation_cross    gabor_052 gabor_110 gabor_005 gabor_085    gabor_052_alt gabor_110 gabor_005_alt gabor_085     "1_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2300_gabor_patch_orientation_052_110_005_085_target_position_1_3_retrieval_position_2"          gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_160_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_008 gabor_055 gabor_126 gabor_160    gabor_008_alt gabor_055 gabor_126_alt gabor_160     "1_51_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_008_055_126_160_target_position_1_3_retrieval_position_1"          gabor_143_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_145 gabor_125 gabor_071 gabor_005    gabor_145_alt gabor_125 gabor_071 gabor_005_alt     "1_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_145_125_071_005_target_position_1_4_retrieval_position_1"          gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_033 gabor_113 gabor_050 gabor_176    gabor_033 gabor_113_alt gabor_050 gabor_176_alt     "1_53_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_033_113_050_176_target_position_2_4_retrieval_position_2"          gabor_circ gabor_113_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_059 gabor_179 gabor_127 gabor_041    gabor_059_alt gabor_179 gabor_127 gabor_041_alt     "1_54_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_059_179_127_041_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_124 gabor_006 gabor_046 gabor_159    gabor_124_alt gabor_006 gabor_046 gabor_159_alt     "1_55_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_124_006_046_159_target_position_1_4_retrieval_position_1"          gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_103 gabor_041 gabor_023 gabor_166    gabor_103_alt gabor_041_alt gabor_023 gabor_166     "1_56_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_103_041_023_166_target_position_1_2_retrieval_position_2"          gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2142      fixation_cross    gabor_031 gabor_080 gabor_112 gabor_141    gabor_031 gabor_080_alt gabor_112 gabor_141_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2150_gabor_patch_orientation_031_080_112_141_target_position_2_4_retrieval_position_1"          gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_166_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_056 gabor_129 gabor_145 gabor_085    gabor_056 gabor_129_alt gabor_145 gabor_085_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_056_129_145_085_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2542      fixation_cross    gabor_174 gabor_050 gabor_157 gabor_029    gabor_174_alt gabor_050 gabor_157 gabor_029_alt     "1_59_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2550_gabor_patch_orientation_174_050_157_029_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_107_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_109 gabor_133 gabor_171 gabor_150    gabor_109 gabor_133_alt gabor_171_alt gabor_150     "1_60_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_109_133_171_150_target_position_2_3_retrieval_position_2"          gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_131 gabor_099 gabor_026 gabor_151    gabor_131 gabor_099_alt gabor_026_alt gabor_151     "1_61_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_131_099_026_151_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_075_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_037 gabor_123 gabor_011 gabor_052    gabor_037_alt gabor_123_alt gabor_011 gabor_052     "1_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_037_123_011_052_target_position_1_2_retrieval_position_2"          gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_048 gabor_133 gabor_013 gabor_082    gabor_048_alt gabor_133_alt gabor_013 gabor_082     "1_63_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_048_133_013_082_target_position_1_2_retrieval_position_1"          gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_109 gabor_026 gabor_083 gabor_133    gabor_109 gabor_026_alt gabor_083 gabor_133_alt     "1_64_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_109_026_083_133_target_position_2_4_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_093 gabor_178 gabor_109 gabor_070    gabor_093_alt gabor_178_alt gabor_109 gabor_070     "1_65_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_093_178_109_070_target_position_1_2_retrieval_position_2"          gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_054 gabor_143 gabor_080 gabor_160    gabor_054 gabor_143_alt gabor_080 gabor_160_alt     "1_66_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_054_143_080_160_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_010 gabor_083 gabor_118 gabor_034    gabor_010 gabor_083_alt gabor_118_alt gabor_034     "1_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_010_083_118_034_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_006 gabor_036 gabor_086 gabor_118    gabor_006 gabor_036 gabor_086_alt gabor_118_alt     "1_68_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_006_036_086_118_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2492      fixation_cross    gabor_103 gabor_082 gabor_130 gabor_149    gabor_103 gabor_082_alt gabor_130_alt gabor_149     "1_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_103_082_130_149_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_014_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_003 gabor_166 gabor_091 gabor_050    gabor_003_alt gabor_166 gabor_091 gabor_050_alt     "1_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_003_166_091_050_target_position_1_4_retrieval_position_1"          gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 