# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_128 gabor_004 gabor_022 gabor_171    gabor_128 gabor_004 gabor_022_alt gabor_171_alt      "2_1_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_128_004_022_171_target_position_1_2_retrieval_position_2"       gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2592      fixation_cross    gabor_162 gabor_021 gabor_090 gabor_039    gabor_162 gabor_021_alt gabor_090_alt gabor_039      "2_2_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_162_021_090_039_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_092 gabor_068 gabor_132 gabor_147    gabor_092_alt gabor_068 gabor_132 gabor_147_alt      "2_3_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_092_068_132_147_target_position_2_3_retrieval_position_2"       gabor_circ gabor_114_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_079 gabor_041 gabor_008 gabor_146    gabor_079_alt gabor_041_alt gabor_008 gabor_146      "2_4_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_079_041_008_146_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_008_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_130 gabor_098 gabor_153 gabor_070    gabor_130 gabor_098_alt gabor_153 gabor_070_alt      "2_5_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_130_098_153_070_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_153_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_002 gabor_040 gabor_113 gabor_169    gabor_002_alt gabor_040 gabor_113 gabor_169_alt      "2_6_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_002_040_113_169_target_position_2_3_retrieval_position_2"       gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2142  2992  2192      fixation_cross    gabor_126 gabor_068 gabor_092 gabor_110    gabor_126 gabor_068_alt gabor_092_alt gabor_110      "2_7_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_126_068_092_110_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_045_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_045_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_108 gabor_019 gabor_150 gabor_134    gabor_108 gabor_019 gabor_150_alt gabor_134_alt      "2_8_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_108_019_150_134_target_position_1_2_retrieval_position_1"       gabor_063_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_063 gabor_125 gabor_019 gabor_089    gabor_063 gabor_125 gabor_019_alt gabor_089_alt      "2_9_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_063_125_019_089_target_position_1_2_retrieval_position_2"       gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_169 gabor_147 gabor_099 gabor_130    gabor_169_alt gabor_147 gabor_099_alt gabor_130     "2_10_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_169_147_099_130_target_position_2_4_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_019 gabor_173 gabor_083 gabor_101    gabor_019 gabor_173_alt gabor_083 gabor_101_alt     "2_11_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_019_173_083_101_target_position_1_3_retrieval_position_1"       gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_081 gabor_115 gabor_145 gabor_167    gabor_081_alt gabor_115 gabor_145_alt gabor_167     "2_12_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_081_115_145_167_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_167_framed    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2192  2992  2242      fixation_cross    gabor_071 gabor_039 gabor_150 gabor_007    gabor_071_alt gabor_039 gabor_150 gabor_007_alt     "2_13_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2250_gabor_patch_orientation_071_039_150_007_target_position_2_3_retrieval_position_1"       gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_071_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_179 gabor_001 gabor_024 gabor_062    gabor_179 gabor_001_alt gabor_024 gabor_062_alt     "2_14_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_179_001_024_062_target_position_1_3_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2042  2992  2242      fixation_cross    gabor_025 gabor_107 gabor_163 gabor_131    gabor_025 gabor_107_alt gabor_163 gabor_131_alt     "2_15_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_025_107_163_131_target_position_1_3_retrieval_position_2"       gabor_circ gabor_107_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_107_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_084 gabor_042 gabor_126 gabor_158    gabor_084_alt gabor_042 gabor_126 gabor_158_alt     "2_16_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_084_042_126_158_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_109 gabor_129 gabor_004 gabor_159    gabor_109_alt gabor_129 gabor_004_alt gabor_159     "2_17_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_109_129_004_159_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_023_framed    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_091 gabor_126 gabor_180 gabor_017    gabor_091 gabor_126 gabor_180_alt gabor_017_alt     "2_18_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_091_126_180_017_target_position_1_2_retrieval_position_1"       gabor_045_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2092      fixation_cross    gabor_155 gabor_126 gabor_109 gabor_045    gabor_155_alt gabor_126 gabor_109_alt gabor_045     "2_19_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2100_gabor_patch_orientation_155_126_109_045_target_position_2_4_retrieval_position_1"       gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_108 gabor_141 gabor_092 gabor_033    gabor_108 gabor_141 gabor_092_alt gabor_033_alt     "2_20_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_108_141_092_033_target_position_1_2_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_116 gabor_067 gabor_136 gabor_051    gabor_116_alt gabor_067 gabor_136_alt gabor_051     "2_21_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_116_067_136_051_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_171 gabor_144 gabor_056 gabor_110    gabor_171 gabor_144_alt gabor_056_alt gabor_110     "2_22_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_171_144_056_110_target_position_1_4_retrieval_position_1"       gabor_171_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_096 gabor_064 gabor_113 gabor_007    gabor_096_alt gabor_064_alt gabor_113 gabor_007     "2_23_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_096_064_113_007_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_147_framed    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_112 gabor_145 gabor_168 gabor_035    gabor_112_alt gabor_145 gabor_168_alt gabor_035     "2_24_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_112_145_168_035_target_position_2_4_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1792  2992  2492      fixation_cross    gabor_081 gabor_118 gabor_141 gabor_063    gabor_081 gabor_118_alt gabor_141_alt gabor_063     "2_25_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2500_gabor_patch_orientation_081_118_141_063_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_141_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_066 gabor_013 gabor_132 gabor_095    gabor_066_alt gabor_013 gabor_132_alt gabor_095     "2_26_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_066_013_132_095_target_position_2_4_retrieval_position_2"       gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_013 gabor_177 gabor_042 gabor_151    gabor_013_alt gabor_177_alt gabor_042 gabor_151     "2_27_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_013_177_042_151_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_104 gabor_064 gabor_041 gabor_169    gabor_104 gabor_064 gabor_041_alt gabor_169_alt     "2_28_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_104_064_041_169_target_position_1_2_retrieval_position_1"       gabor_104_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_098 gabor_036 gabor_013 gabor_082    gabor_098_alt gabor_036_alt gabor_013 gabor_082     "2_29_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_098_036_013_082_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_160 gabor_089 gabor_116 gabor_142    gabor_160_alt gabor_089_alt gabor_116 gabor_142     "2_30_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_160_089_116_142_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_114 gabor_090 gabor_157 gabor_003    gabor_114 gabor_090_alt gabor_157_alt gabor_003     "2_31_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_114_090_157_003_target_position_1_4_retrieval_position_1"       gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1892  2992  2592      fixation_cross    gabor_108 gabor_180 gabor_054 gabor_025    gabor_108 gabor_180_alt gabor_054 gabor_025_alt     "2_32_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2600_gabor_patch_orientation_108_180_054_025_target_position_1_3_retrieval_position_2"       gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_154 gabor_132 gabor_091 gabor_110    gabor_154_alt gabor_132 gabor_091_alt gabor_110     "2_33_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_154_132_091_110_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_110_framed    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_142 gabor_056 gabor_172 gabor_031    gabor_142_alt gabor_056 gabor_172 gabor_031_alt     "2_34_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_142_056_172_031_target_position_2_3_retrieval_position_2"       gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_119 gabor_140 gabor_159 gabor_082    gabor_119_alt gabor_140_alt gabor_159 gabor_082     "2_35_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_119_140_159_082_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_168 gabor_151 gabor_062 gabor_029    gabor_168 gabor_151_alt gabor_062_alt gabor_029     "2_36_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_168_151_062_029_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_003 gabor_025 gabor_178 gabor_066    gabor_003 gabor_025_alt gabor_178 gabor_066_alt     "2_37_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_003_025_178_066_target_position_1_3_retrieval_position_1"       gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2042  2992  2542      fixation_cross    gabor_180 gabor_140 gabor_157 gabor_052    gabor_180 gabor_140_alt gabor_157 gabor_052_alt     "2_38_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2550_gabor_patch_orientation_180_140_157_052_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_007_framed    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_007_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  1992      fixation_cross    gabor_054 gabor_107 gabor_001 gabor_024    gabor_054_alt gabor_107_alt gabor_001 gabor_024     "2_39_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_054_107_001_024_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_081 gabor_023 gabor_171 gabor_060    gabor_081 gabor_023_alt gabor_171_alt gabor_060     "2_40_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_081_023_171_060_target_position_1_4_retrieval_position_1"       gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1842  2992  2292      fixation_cross    gabor_036 gabor_110 gabor_141 gabor_089    gabor_036_alt gabor_110_alt gabor_141 gabor_089     "2_41_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_036_110_141_089_target_position_3_4_retrieval_position_2"       gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_043 gabor_153 gabor_175 gabor_025    gabor_043 gabor_153_alt gabor_175_alt gabor_025     "2_42_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_043_153_175_025_target_position_1_4_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1892      fixation_cross    gabor_121 gabor_089 gabor_068 gabor_008    gabor_121 gabor_089_alt gabor_068_alt gabor_008     "2_43_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_121_089_068_008_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_104 gabor_120 gabor_063 gabor_044    gabor_104 gabor_120_alt gabor_063_alt gabor_044     "2_44_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_104_120_063_044_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_023 gabor_113 gabor_155 gabor_130    gabor_023_alt gabor_113_alt gabor_155 gabor_130     "2_45_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_023_113_155_130_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_055 gabor_071 gabor_009 gabor_161    gabor_055_alt gabor_071_alt gabor_009 gabor_161     "2_46_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_055_071_009_161_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_034 gabor_145 gabor_094 gabor_011    gabor_034 gabor_145 gabor_094_alt gabor_011_alt     "2_47_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_034_145_094_011_target_position_1_2_retrieval_position_1"       gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2242  2992  2092      fixation_cross    gabor_079 gabor_140 gabor_034 gabor_056    gabor_079_alt gabor_140 gabor_034_alt gabor_056     "2_48_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2100_gabor_patch_orientation_079_140_034_056_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_169 gabor_045 gabor_003 gabor_083    gabor_169 gabor_045_alt gabor_003_alt gabor_083     "2_49_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_169_045_003_083_target_position_1_4_retrieval_position_1"       gabor_169_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_050 gabor_072 gabor_112 gabor_088    gabor_050 gabor_072_alt gabor_112_alt gabor_088     "2_50_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_050_072_112_088_target_position_1_4_retrieval_position_1"       gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_089 gabor_033 gabor_114 gabor_156    gabor_089_alt gabor_033_alt gabor_114 gabor_156     "2_51_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_089_033_114_156_target_position_3_4_retrieval_position_2"       gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_172_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_153 gabor_045 gabor_169 gabor_028    gabor_153 gabor_045_alt gabor_169_alt gabor_028     "2_52_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_153_045_169_028_target_position_1_4_retrieval_position_1"       gabor_153_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_058 gabor_008 gabor_165 gabor_143    gabor_058_alt gabor_008_alt gabor_165 gabor_143     "2_53_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_058_008_165_143_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_179 gabor_129 gabor_013 gabor_073    gabor_179 gabor_129_alt gabor_013 gabor_073_alt     "2_54_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_179_129_013_073_target_position_1_3_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_153 gabor_084 gabor_065 gabor_173    gabor_153 gabor_084_alt gabor_065_alt gabor_173     "2_55_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_153_084_065_173_target_position_1_4_retrieval_position_1"       gabor_153_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_135 gabor_091 gabor_156 gabor_068    gabor_135 gabor_091_alt gabor_156 gabor_068_alt     "2_56_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_135_091_156_068_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_088 gabor_052 gabor_072 gabor_116    gabor_088_alt gabor_052 gabor_072 gabor_116_alt     "2_57_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_088_052_072_116_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_072_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_009 gabor_038 gabor_151 gabor_124    gabor_009 gabor_038_alt gabor_151_alt gabor_124     "2_58_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_009_038_151_124_target_position_1_4_retrieval_position_2"       gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_175_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  1892      fixation_cross    gabor_052 gabor_120 gabor_161 gabor_036    gabor_052 gabor_120_alt gabor_161 gabor_036_alt     "2_59_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_052_120_161_036_target_position_1_3_retrieval_position_1"       gabor_099_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_125 gabor_054 gabor_035 gabor_140    gabor_125 gabor_054_alt gabor_035_alt gabor_140     "2_60_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_125_054_035_140_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_140_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2042  2992  2442      fixation_cross    gabor_168 gabor_091 gabor_150 gabor_026    gabor_168 gabor_091_alt gabor_150 gabor_026_alt     "2_61_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2450_gabor_patch_orientation_168_091_150_026_target_position_1_3_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_097 gabor_178 gabor_153 gabor_119    gabor_097 gabor_178 gabor_153_alt gabor_119_alt     "2_62_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_097_178_153_119_target_position_1_2_retrieval_position_1"       gabor_097_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_177 gabor_036 gabor_107 gabor_019    gabor_177 gabor_036_alt gabor_107_alt gabor_019     "2_63_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_177_036_107_019_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_155_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_101 gabor_043 gabor_080 gabor_148    gabor_101_alt gabor_043 gabor_080 gabor_148_alt     "2_64_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_101_043_080_148_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_068 gabor_009 gabor_123 gabor_085    gabor_068_alt gabor_009_alt gabor_123 gabor_085     "2_65_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_068_009_123_085_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2142  2992  2242      fixation_cross    gabor_092 gabor_053 gabor_161 gabor_077    gabor_092_alt gabor_053 gabor_161_alt gabor_077     "2_66_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_092_053_161_077_target_position_2_4_retrieval_position_1"       gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_120 gabor_096 gabor_156 gabor_046    gabor_120 gabor_096_alt gabor_156_alt gabor_046     "2_67_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_120_096_156_046_target_position_1_4_retrieval_position_1"       gabor_073_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_033 gabor_017 gabor_084 gabor_153    gabor_033 gabor_017 gabor_084_alt gabor_153_alt     "2_68_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_033_017_084_153_target_position_1_2_retrieval_position_2"       gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_042 gabor_092 gabor_023 gabor_067    gabor_042_alt gabor_092 gabor_023_alt gabor_067     "2_69_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_042_092_023_067_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2042  2992  2292      fixation_cross    gabor_118 gabor_062 gabor_152 gabor_137    gabor_118_alt gabor_062_alt gabor_152 gabor_137     "2_70_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2300_gabor_patch_orientation_118_062_152_137_target_position_3_4_retrieval_position_2"       gabor_circ gabor_012_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_012_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  