# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_083 gabor_038 gabor_144 gabor_056    gabor_083 gabor_038_alt gabor_144_alt gabor_056      "2_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_083_038_144_056_target_position_2_3_retrieval_position_2"          gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_145 gabor_168 gabor_081 gabor_036    gabor_145 gabor_168 gabor_081_alt gabor_036_alt      "2_2_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_145_168_081_036_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_126_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_022 gabor_170 gabor_145 gabor_061    gabor_022_alt gabor_170 gabor_145_alt gabor_061      "2_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_022_170_145_061_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_099_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  2592      fixation_cross    gabor_142 gabor_108 gabor_036 gabor_081    gabor_142_alt gabor_108 gabor_036 gabor_081_alt      "2_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2600_gabor_patch_orientation_142_108_036_081_target_position_1_4_retrieval_position_2"          gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_112 gabor_093 gabor_155 gabor_037    gabor_112_alt gabor_093 gabor_155 gabor_037_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_112_093_155_037_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_175_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_077 gabor_117 gabor_011 gabor_042    gabor_077 gabor_117_alt gabor_011_alt gabor_042      "2_6_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_077_117_011_042_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_131 gabor_151 gabor_091 gabor_173    gabor_131_alt gabor_151_alt gabor_091 gabor_173      "2_7_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_131_151_091_173_target_position_1_2_retrieval_position_2"          gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_115 gabor_081 gabor_149 gabor_032    gabor_115 gabor_081_alt gabor_149_alt gabor_032      "2_8_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_115_081_149_032_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_009_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2292      fixation_cross    gabor_129 gabor_175 gabor_060 gabor_102    gabor_129_alt gabor_175 gabor_060_alt gabor_102      "2_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2300_gabor_patch_orientation_129_175_060_102_target_position_1_3_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_121 gabor_150 gabor_084 gabor_001    gabor_121_alt gabor_150_alt gabor_084 gabor_001     "2_10_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_121_150_084_001_target_position_1_2_retrieval_position_1"          gabor_121_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_011 gabor_162 gabor_049 gabor_079    gabor_011 gabor_162_alt gabor_049 gabor_079_alt     "2_11_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_011_162_049_079_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_079_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_072 gabor_008 gabor_098 gabor_159    gabor_072_alt gabor_008 gabor_098_alt gabor_159     "2_12_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_072_008_098_159_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_154 gabor_172 gabor_089 gabor_138    gabor_154_alt gabor_172 gabor_089 gabor_138_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_154_172_089_138_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_036 gabor_067 gabor_017 gabor_085    gabor_036_alt gabor_067 gabor_017 gabor_085_alt     "2_14_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_036_067_017_085_target_position_1_4_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2142      fixation_cross    gabor_043 gabor_015 gabor_121 gabor_063    gabor_043 gabor_015_alt gabor_121 gabor_063_alt     "2_15_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_043_015_121_063_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_171_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_171_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_090 gabor_026 gabor_111 gabor_048    gabor_090_alt gabor_026 gabor_111_alt gabor_048     "2_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_090_026_111_048_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_012 gabor_129 gabor_092 gabor_044    gabor_012_alt gabor_129_alt gabor_092 gabor_044     "2_17_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_012_129_092_044_target_position_1_2_retrieval_position_2"          gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_083 gabor_029 gabor_047 gabor_008    gabor_083_alt gabor_029_alt gabor_047 gabor_008     "2_18_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_083_029_047_008_target_position_1_2_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_140 gabor_157 gabor_080 gabor_051    gabor_140 gabor_157_alt gabor_080_alt gabor_051     "2_19_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_140_157_080_051_target_position_2_3_retrieval_position_2"          gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_178 gabor_101 gabor_144 gabor_125    gabor_178 gabor_101_alt gabor_144_alt gabor_125     "2_20_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_178_101_144_125_target_position_2_3_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1992  2992  2442      fixation_cross    gabor_121 gabor_008 gabor_170 gabor_085    gabor_121_alt gabor_008 gabor_170_alt gabor_085     "2_21_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2450_gabor_patch_orientation_121_008_170_085_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_075 gabor_137 gabor_109 gabor_024    gabor_075_alt gabor_137 gabor_109 gabor_024_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_075_137_109_024_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_149 gabor_027 gabor_112 gabor_002    gabor_149 gabor_027_alt gabor_112_alt gabor_002     "2_23_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_149_027_112_002_target_position_2_3_retrieval_position_2"          gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_061 gabor_086 gabor_102 gabor_120    gabor_061 gabor_086_alt gabor_102_alt gabor_120     "2_24_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_061_086_102_120_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_050 gabor_171 gabor_104 gabor_137    gabor_050 gabor_171_alt gabor_104 gabor_137_alt     "2_25_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_050_171_104_137_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_179 gabor_023 gabor_089 gabor_050    gabor_179 gabor_023_alt gabor_089_alt gabor_050     "2_26_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_179_023_089_050_target_position_2_3_retrieval_position_2"          gabor_circ gabor_161_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_037 gabor_073 gabor_100 gabor_146    gabor_037 gabor_073_alt gabor_100 gabor_146_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_037_073_100_146_target_position_2_4_retrieval_position_2"          gabor_circ gabor_121_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  2042      fixation_cross    gabor_128 gabor_047 gabor_162 gabor_098    gabor_128 gabor_047_alt gabor_162_alt gabor_098     "2_28_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_128_047_162_098_target_position_2_3_retrieval_position_1"          gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_080_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_153 gabor_180 gabor_013 gabor_045    gabor_153_alt gabor_180 gabor_013_alt gabor_045     "2_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_153_180_013_045_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_177 gabor_042 gabor_091 gabor_003    gabor_177_alt gabor_042_alt gabor_091 gabor_003     "2_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_177_042_091_003_target_position_1_2_retrieval_position_1"          gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_131 gabor_069 gabor_084 gabor_054    gabor_131 gabor_069_alt gabor_084 gabor_054_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_131_069_084_054_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2542      fixation_cross    gabor_147 gabor_168 gabor_080 gabor_041    gabor_147 gabor_168 gabor_080_alt gabor_041_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2550_gabor_patch_orientation_147_168_080_041_target_position_3_4_retrieval_position_1"          gabor_147_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_147_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_010 gabor_097 gabor_062 gabor_128    gabor_010 gabor_097 gabor_062_alt gabor_128_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_010_097_062_128_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_053 gabor_069 gabor_112 gabor_022    gabor_053_alt gabor_069 gabor_112_alt gabor_022     "2_34_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_053_069_112_022_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_159_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_099 gabor_016 gabor_046 gabor_063    gabor_099 gabor_016_alt gabor_046 gabor_063_alt     "2_35_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_099_016_046_063_target_position_2_4_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1892  2992  2392      fixation_cross    gabor_037 gabor_059 gabor_179 gabor_148    gabor_037_alt gabor_059 gabor_179_alt gabor_148     "2_36_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_037_059_179_148_target_position_1_3_retrieval_position_2"          gabor_circ gabor_059_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_059_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_009 gabor_178 gabor_125 gabor_146    gabor_009_alt gabor_178_alt gabor_125 gabor_146     "2_37_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_009_178_125_146_target_position_1_2_retrieval_position_1"          gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_060 gabor_097 gabor_143 gabor_033    gabor_060 gabor_097_alt gabor_143_alt gabor_033     "2_38_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_060_097_143_033_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_143_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_059 gabor_005 gabor_039 gabor_178    gabor_059 gabor_005_alt gabor_039 gabor_178_alt     "2_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_059_005_039_178_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_077 gabor_153 gabor_098 gabor_013    gabor_077_alt gabor_153_alt gabor_098 gabor_013     "2_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_077_153_098_013_target_position_1_2_retrieval_position_1"          gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2442      fixation_cross    gabor_169 gabor_140 gabor_105 gabor_033    gabor_169_alt gabor_140 gabor_105 gabor_033_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2450_gabor_patch_orientation_169_140_105_033_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_105_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_105_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_135 gabor_152 gabor_178 gabor_064    gabor_135_alt gabor_152 gabor_178_alt gabor_064     "2_42_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_135_152_178_064_target_position_1_3_retrieval_position_1"          gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_180 gabor_011 gabor_060 gabor_099    gabor_180_alt gabor_011 gabor_060 gabor_099_alt     "2_43_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_180_011_060_099_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2142      fixation_cross    gabor_135 gabor_162 gabor_050 gabor_111    gabor_135 gabor_162_alt gabor_050_alt gabor_111     "2_44_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_135_162_050_111_target_position_2_3_retrieval_position_1"          gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_119 gabor_092 gabor_171 gabor_011    gabor_119 gabor_092_alt gabor_171 gabor_011_alt     "2_45_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_119_092_171_011_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_035 gabor_020 gabor_143 gabor_060    gabor_035 gabor_020 gabor_143_alt gabor_060_alt     "2_46_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_035_020_143_060_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_109_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_015 gabor_099 gabor_064 gabor_176    gabor_015 gabor_099 gabor_064_alt gabor_176_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_015_099_064_176_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_158 gabor_113 gabor_130 gabor_089    gabor_158_alt gabor_113 gabor_130_alt gabor_089     "2_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_158_113_130_089_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_170 gabor_121 gabor_152 gabor_095    gabor_170 gabor_121 gabor_152_alt gabor_095_alt     "2_49_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_170_121_152_095_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_035 gabor_057 gabor_146 gabor_104    gabor_035_alt gabor_057_alt gabor_146 gabor_104     "2_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_035_057_146_104_target_position_1_2_retrieval_position_1"          gabor_083_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2042      fixation_cross    gabor_132 gabor_027 gabor_069 gabor_112    gabor_132_alt gabor_027_alt gabor_069 gabor_112     "2_51_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_132_027_069_112_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_158_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_178 gabor_018 gabor_097 gabor_068    gabor_178_alt gabor_018_alt gabor_097 gabor_068     "2_52_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_178_018_097_068_target_position_1_2_retrieval_position_1"          gabor_178_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  1992      fixation_cross    gabor_153 gabor_176 gabor_046 gabor_125    gabor_153_alt gabor_176 gabor_046_alt gabor_125     "2_53_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_153_176_046_125_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_101 gabor_129 gabor_078 gabor_154    gabor_101_alt gabor_129 gabor_078 gabor_154_alt     "2_54_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_101_129_078_154_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1942  2992  2442      fixation_cross    gabor_003 gabor_019 gabor_093 gabor_168    gabor_003 gabor_019_alt gabor_093 gabor_168_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_003_019_093_168_target_position_2_4_retrieval_position_1"          gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_003_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_101 gabor_030 gabor_142 gabor_117    gabor_101_alt gabor_030_alt gabor_142 gabor_117     "2_56_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_101_030_142_117_target_position_1_2_retrieval_position_1"          gabor_101_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_135 gabor_177 gabor_055 gabor_089    gabor_135 gabor_177 gabor_055_alt gabor_089_alt     "2_57_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_135_177_055_089_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_007_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_119 gabor_087 gabor_157 gabor_011    gabor_119_alt gabor_087 gabor_157 gabor_011_alt     "2_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_119_087_157_011_target_position_1_4_retrieval_position_1"          gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_039 gabor_007 gabor_125 gabor_056    gabor_039_alt gabor_007 gabor_125 gabor_056_alt     "2_59_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_039_007_125_056_target_position_1_4_retrieval_position_1"          gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_052 gabor_030 gabor_075 gabor_140    gabor_052_alt gabor_030 gabor_075_alt gabor_140     "2_60_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_052_030_075_140_target_position_1_3_retrieval_position_2"          gabor_circ gabor_030_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_098 gabor_069 gabor_139 gabor_113    gabor_098 gabor_069_alt gabor_139 gabor_113_alt     "2_61_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_098_069_139_113_target_position_2_4_retrieval_position_2"          gabor_circ gabor_069_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_136 gabor_021 gabor_069 gabor_050    gabor_136_alt gabor_021 gabor_069_alt gabor_050     "2_62_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_136_021_069_050_target_position_1_3_retrieval_position_1"          gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_167 gabor_017 gabor_052 gabor_081    gabor_167 gabor_017 gabor_052_alt gabor_081_alt     "2_63_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_167_017_052_081_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_097 gabor_144 gabor_120 gabor_180    gabor_097 gabor_144_alt gabor_120_alt gabor_180     "2_64_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_097_144_120_180_target_position_2_3_retrieval_position_2"          gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_122 gabor_072 gabor_155 gabor_105    gabor_122 gabor_072 gabor_155_alt gabor_105_alt     "2_65_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_122_072_155_105_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_155_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_030 gabor_114 gabor_098 gabor_158    gabor_030_alt gabor_114 gabor_098 gabor_158_alt     "2_66_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_030_114_098_158_target_position_1_4_retrieval_position_1"          gabor_077_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_173 gabor_037 gabor_066 gabor_110    gabor_173_alt gabor_037_alt gabor_066 gabor_110     "2_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_173_037_066_110_target_position_1_2_retrieval_position_1"          gabor_173_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2492      fixation_cross    gabor_056 gabor_026 gabor_004 gabor_161    gabor_056_alt gabor_026 gabor_004 gabor_161_alt     "2_68_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_056_026_004_161_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_004_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_171 gabor_136 gabor_118 gabor_004    gabor_171 gabor_136_alt gabor_118 gabor_004_alt     "2_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_171_136_118_004_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2092      fixation_cross    gabor_031 gabor_112 gabor_174 gabor_090    gabor_031 gabor_112 gabor_174_alt gabor_090_alt     "2_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2100_gabor_patch_orientation_031_112_174_090_target_position_3_4_retrieval_position_2"          gabor_circ gabor_063_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_063_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  