# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_165 gabor_117 gabor_009 gabor_085    gabor_165_alt gabor_117 gabor_009_alt gabor_085      "2_1_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_165_117_009_085_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_160 gabor_049 gabor_088 gabor_005    gabor_160 gabor_049 gabor_088_alt gabor_005_alt      "2_2_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_160_049_088_005_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_135 gabor_050 gabor_099 gabor_019    gabor_135_alt gabor_050 gabor_099 gabor_019_alt      "2_3_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_135_050_099_019_target_position_1_4_retrieval_position_1"          gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1942  2992  2092      fixation_cross    gabor_068 gabor_014 gabor_046 gabor_133    gabor_068_alt gabor_014_alt gabor_046 gabor_133      "2_4_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2100_gabor_patch_orientation_068_014_046_133_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_178_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_069 gabor_157 gabor_041 gabor_125    gabor_069 gabor_157 gabor_041_alt gabor_125_alt      "2_5_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_069_157_041_125_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2242      fixation_cross    gabor_006 gabor_040 gabor_055 gabor_176    gabor_006_alt gabor_040_alt gabor_055 gabor_176      "2_6_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_006_040_055_176_target_position_1_2_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_169 gabor_123 gabor_016 gabor_082    gabor_169 gabor_123_alt gabor_016_alt gabor_082      "2_7_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_169_123_016_082_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_169 gabor_150 gabor_045 gabor_118    gabor_169_alt gabor_150_alt gabor_045 gabor_118      "2_8_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_169_150_045_118_target_position_1_2_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_081 gabor_002 gabor_123 gabor_017    gabor_081 gabor_002 gabor_123_alt gabor_017_alt      "2_9_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_081_002_123_017_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_052 gabor_019 gabor_141 gabor_078    gabor_052_alt gabor_019_alt gabor_141 gabor_078     "2_10_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_052_019_141_078_target_position_1_2_retrieval_position_2"          gabor_circ gabor_019_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1842  2992  2292      fixation_cross    gabor_101 gabor_081 gabor_128 gabor_158    gabor_101 gabor_081_alt gabor_128_alt gabor_158     "2_11_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_101_081_128_158_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_018_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_018_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_102 gabor_151 gabor_179 gabor_074    gabor_102 gabor_151_alt gabor_179 gabor_074_alt     "2_12_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_102_151_179_074_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  1992      fixation_cross    gabor_047 gabor_100 gabor_137 gabor_070    gabor_047_alt gabor_100 gabor_137 gabor_070_alt     "2_13_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_047_100_137_070_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_147 gabor_068 gabor_178 gabor_091    gabor_147 gabor_068_alt gabor_178_alt gabor_091     "2_14_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_147_068_178_091_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_100 gabor_015 gabor_128 gabor_070    gabor_100 gabor_015_alt gabor_128_alt gabor_070     "2_15_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_100_015_128_070_target_position_2_3_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_101 gabor_163 gabor_079 gabor_123    gabor_101_alt gabor_163 gabor_079_alt gabor_123     "2_16_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_101_163_079_123_target_position_1_3_retrieval_position_1"          gabor_055_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1842  2992  2592      fixation_cross    gabor_110 gabor_086 gabor_045 gabor_029    gabor_110 gabor_086 gabor_045_alt gabor_029_alt     "2_17_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2600_gabor_patch_orientation_110_086_045_029_target_position_3_4_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_112 gabor_090 gabor_166 gabor_137    gabor_112_alt gabor_090 gabor_166_alt gabor_137     "2_18_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_112_090_166_137_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_178 gabor_139 gabor_089 gabor_068    gabor_178 gabor_139_alt gabor_089 gabor_068_alt     "2_19_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_178_139_089_068_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_068_framed    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_058 gabor_110 gabor_024 gabor_040    gabor_058 gabor_110 gabor_024_alt gabor_040_alt     "2_20_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_058_110_024_040_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_175_framed    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1942  2992  2142      fixation_cross    gabor_084 gabor_159 gabor_140 gabor_017    gabor_084_alt gabor_159_alt gabor_140 gabor_017     "2_21_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2150_gabor_patch_orientation_084_159_140_017_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_126 gabor_178 gabor_003 gabor_111    gabor_126 gabor_178_alt gabor_003 gabor_111_alt     "2_22_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_126_178_003_111_target_position_2_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_014 gabor_067 gabor_127 gabor_104    gabor_014 gabor_067_alt gabor_127_alt gabor_104     "2_23_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_014_067_127_104_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_168 gabor_079 gabor_012 gabor_100    gabor_168_alt gabor_079_alt gabor_012 gabor_100     "2_24_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_168_079_012_100_target_position_1_2_retrieval_position_2"          gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1842  2992  2342      fixation_cross    gabor_009 gabor_036 gabor_088 gabor_116    gabor_009 gabor_036_alt gabor_088 gabor_116_alt     "2_25_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_009_036_088_116_target_position_2_4_retrieval_position_1"          gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_009_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_069 gabor_111 gabor_024 gabor_139    gabor_069 gabor_111 gabor_024_alt gabor_139_alt     "2_26_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_069_111_024_139_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_159_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_008 gabor_145 gabor_164 gabor_028    gabor_008_alt gabor_145 gabor_164_alt gabor_028     "2_27_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_008_145_164_028_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_116_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_124 gabor_174 gabor_102 gabor_065    gabor_124 gabor_174_alt gabor_102_alt gabor_065     "2_28_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_124_174_102_065_target_position_2_3_retrieval_position_2"          gabor_circ gabor_036_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_122 gabor_064 gabor_144 gabor_012    gabor_122_alt gabor_064 gabor_144_alt gabor_012     "2_29_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_122_064_144_012_target_position_1_3_retrieval_position_1"          gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_044 gabor_176 gabor_069 gabor_110    gabor_044_alt gabor_176 gabor_069 gabor_110_alt     "2_30_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_044_176_069_110_target_position_1_4_retrieval_position_1"          gabor_044_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_137 gabor_052 gabor_120 gabor_081    gabor_137 gabor_052_alt gabor_120 gabor_081_alt     "2_31_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_137_052_120_081_target_position_2_4_retrieval_position_2"          gabor_circ gabor_102_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_139 gabor_023 gabor_052 gabor_174    gabor_139 gabor_023_alt gabor_052 gabor_174_alt     "2_32_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_139_023_052_174_target_position_2_4_retrieval_position_2"          gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1792  2992  1892      fixation_cross    gabor_036 gabor_122 gabor_100 gabor_146    gabor_036 gabor_122_alt gabor_100 gabor_146_alt     "2_33_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_1900_gabor_patch_orientation_036_122_100_146_target_position_2_4_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_172 gabor_123 gabor_094 gabor_037    gabor_172 gabor_123 gabor_094_alt gabor_037_alt     "2_34_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_172_123_094_037_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1992  2992  1942      fixation_cross    gabor_096 gabor_178 gabor_141 gabor_119    gabor_096 gabor_178_alt gabor_141 gabor_119_alt     "2_35_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_1950_gabor_patch_orientation_096_178_141_119_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_141_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_105 gabor_138 gabor_049 gabor_161    gabor_105_alt gabor_138_alt gabor_049 gabor_161     "2_36_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_105_138_049_161_target_position_1_2_retrieval_position_2"          gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_170 gabor_037 gabor_096 gabor_015    gabor_170_alt gabor_037 gabor_096_alt gabor_015     "2_37_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_170_037_096_015_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_163 gabor_104 gabor_131 gabor_022    gabor_163_alt gabor_104_alt gabor_131 gabor_022     "2_38_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_163_104_131_022_target_position_1_2_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_060 gabor_170 gabor_139 gabor_033    gabor_060_alt gabor_170 gabor_139 gabor_033_alt     "2_39_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_060_170_139_033_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2242  2992  1942      fixation_cross    gabor_132 gabor_148 gabor_177 gabor_093    gabor_132_alt gabor_148 gabor_177_alt gabor_093     "2_40_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_132_148_177_093_target_position_1_3_retrieval_position_2"          gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_142 gabor_056 gabor_078 gabor_121    gabor_142 gabor_056_alt gabor_078_alt gabor_121     "2_41_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_142_056_078_121_target_position_2_3_retrieval_position_2"          gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_113 gabor_060 gabor_042 gabor_094    gabor_113 gabor_060 gabor_042_alt gabor_094_alt     "2_42_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_113_060_042_094_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_044 gabor_167 gabor_082 gabor_106    gabor_044_alt gabor_167 gabor_082_alt gabor_106     "2_43_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_044_167_082_106_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_131_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_036 gabor_120 gabor_056 gabor_001    gabor_036_alt gabor_120 gabor_056 gabor_001_alt     "2_44_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_036_120_056_001_target_position_1_4_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_109 gabor_133 gabor_165 gabor_058    gabor_109_alt gabor_133_alt gabor_165 gabor_058     "2_45_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_109_133_165_058_target_position_1_2_retrieval_position_2"          gabor_circ gabor_085_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_065 gabor_032 gabor_094 gabor_110    gabor_065 gabor_032_alt gabor_094 gabor_110_alt     "2_46_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_065_032_094_110_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_110_framed    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1892  2992  2142      fixation_cross    gabor_105 gabor_141 gabor_069 gabor_088    gabor_105_alt gabor_141 gabor_069 gabor_088_alt     "2_47_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2150_gabor_patch_orientation_105_141_069_088_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_022_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_022_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_009 gabor_114 gabor_136 gabor_169    gabor_009 gabor_114_alt gabor_136 gabor_169_alt     "2_48_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_009_114_136_169_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1992  2992  2242      fixation_cross    gabor_106 gabor_021 gabor_167 gabor_136    gabor_106_alt gabor_021 gabor_167_alt gabor_136     "2_49_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2250_gabor_patch_orientation_106_021_167_136_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_136_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_136_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_043 gabor_149 gabor_114 gabor_095    gabor_043_alt gabor_149_alt gabor_114 gabor_095     "2_50_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_043_149_114_095_target_position_1_2_retrieval_position_1"          gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_053 gabor_125 gabor_175 gabor_038    gabor_053 gabor_125_alt gabor_175 gabor_038_alt     "2_51_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_053_125_175_038_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_038_framed    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_046 gabor_019 gabor_068 gabor_087    gabor_046 gabor_019_alt gabor_068_alt gabor_087     "2_52_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_046_019_068_087_target_position_2_3_retrieval_position_2"          gabor_circ gabor_019_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_157 gabor_177 gabor_024 gabor_051    gabor_157 gabor_177_alt gabor_024_alt gabor_051     "2_53_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_157_177_024_051_target_position_2_3_retrieval_position_2"          gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2192  2992  2092      fixation_cross    gabor_008 gabor_094 gabor_153 gabor_029    gabor_008_alt gabor_094 gabor_153 gabor_029_alt     "2_54_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_008_094_153_029_target_position_1_4_retrieval_position_2"          gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_179 gabor_063 gabor_026 gabor_091    gabor_179 gabor_063 gabor_026_alt gabor_091_alt     "2_55_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_179_063_026_091_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_169 gabor_145 gabor_025 gabor_055    gabor_169 gabor_145_alt gabor_025_alt gabor_055     "2_56_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_169_145_025_055_target_position_2_3_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_152 gabor_127 gabor_087 gabor_047    gabor_152 gabor_127_alt gabor_087 gabor_047_alt     "2_57_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_152_127_087_047_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_047_framed    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_038 gabor_175 gabor_020 gabor_156    gabor_038 gabor_175_alt gabor_020_alt gabor_156     "2_58_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_038_175_020_156_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_111 gabor_058 gabor_164 gabor_093    gabor_111 gabor_058 gabor_164_alt gabor_093_alt     "2_59_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_111_058_164_093_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_028 gabor_100 gabor_085 gabor_141    gabor_028_alt gabor_100 gabor_085_alt gabor_141     "2_60_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_028_100_085_141_target_position_1_3_retrieval_position_1"          gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_005 gabor_045 gabor_135 gabor_069    gabor_005_alt gabor_045_alt gabor_135 gabor_069     "2_61_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_005_045_135_069_target_position_1_2_retrieval_position_2"          gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1742  2992  2142      fixation_cross    gabor_130 gabor_177 gabor_012 gabor_088    gabor_130_alt gabor_177 gabor_012 gabor_088_alt     "2_62_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2150_gabor_patch_orientation_130_177_012_088_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_060_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_060_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_156 gabor_001 gabor_068 gabor_028    gabor_156_alt gabor_001 gabor_068_alt gabor_028     "2_63_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_156_001_068_028_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_020 gabor_131 gabor_078 gabor_002    gabor_020_alt gabor_131 gabor_078_alt gabor_002     "2_64_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_020_131_078_002_target_position_1_3_retrieval_position_1"          gabor_020_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  2242      fixation_cross    gabor_112 gabor_136 gabor_030 gabor_163    gabor_112_alt gabor_136 gabor_030 gabor_163_alt     "2_65_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_112_136_030_163_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_067 gabor_001 gabor_088 gabor_020    gabor_067_alt gabor_001 gabor_088_alt gabor_020     "2_66_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_067_001_088_020_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_077 gabor_119 gabor_146 gabor_059    gabor_077_alt gabor_119 gabor_146_alt gabor_059     "2_67_Encoding_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_077_119_146_059_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P7_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_086 gabor_141 gabor_022 gabor_005    gabor_086 gabor_141_alt gabor_022_alt gabor_005     "2_68_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_086_141_022_005_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_022_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_135 gabor_095 gabor_063 gabor_011    gabor_135_alt gabor_095 gabor_063 gabor_011_alt     "2_69_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_135_095_063_011_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2142  2992  2242      fixation_cross    gabor_038 gabor_127 gabor_170 gabor_152    gabor_038 gabor_127 gabor_170_alt gabor_152_alt     "2_70_Encoding_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_038_127_170_152_target_position_3_4_retrieval_position_1"          gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P7_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_038_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 